PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  expName = delay_discounting_exp
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/RIYA/OneDrive/Documents/Lab in Psychology/conditions files/discounting task.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)]),
      OrderedDict([('reward_today', 98), ('future_reward', 120), ('delay', 174)]),
      OrderedDict([('reward_today', 100), ('future_reward', 154), ('delay', 201)]),
      OrderedDict([('reward_today', 115), ('future_reward', 168), ('delay', 227)]),
      OrderedDict([('reward_today', 127), ('future_reward', 183), ('delay', 254)]),
      OrderedDict([('reward_today', 140), ('future_reward', 212), ('delay', 280)]),
      OrderedDict([('reward_today', 152), ('future_reward', 231), ('delay', 307)]),
      OrderedDict([('reward_today', 164), ('future_reward', 253), ('delay', 334)]),
      OrderedDict([('reward_today', 176), ('future_reward', 274), ('delay', 360)]),
      OrderedDict([('reward_today', 188), ('future_reward', 295), ('delay', 387)]),
      OrderedDict([('reward_today', 201), ('future_reward', 317), ('delay', 413)]),
      OrderedDict([('reward_today', 213), ('future_reward', 338), ('delay', 440)]),
      OrderedDict([('reward_today', 225), ('future_reward', 359), ('delay', 467)]),
      OrderedDict([('reward_today', 237), ('future_reward', 380), ('delay', 493)])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
    Routine trial
  LoopTerminator trials
